PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': '', 'hz': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [2240, 1260]
  color = White
  expName = MonitiorTime_builder_online_20220510
  keyboardBackend = PsychToolbox
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Routines
  Routine wait
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['hz'] == '60':
            ptime = t_60
        elif expInfo['hz'] == '120':
            ptime = t_120

        ptime_txt = 'psychopyBuilder' + expInfo['hz'] + '_' + str(ptime*1000)
  Routine ptarget
    ImageComponent target
      image = face01.bmp
      size = (300, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ptime
      units = pix
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    TextComponent text
      color = black
      letterHeight = 20
      pos = (0, 250)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ptime
      text [set every repeat] = $ptime_txt
      units = pix
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        t_timer = new util.Clock();
      Begin Routine:
        t_timer = core.Clock()
      End JS Routine:
        t_program = t_timer.getTime();
        psychoJS.experiment.addData("t_program", t_program);
      End Routine:
        t_program = t_timer.getTime()
        thisExp.addData('t_program', t_program);
  Routine pmask
    ImageComponent mask
      image = mask.bmp
      size = (300, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.016
      units = pix
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    TextComponent text_2
      color = black
      letterHeight = 20
      pos = (0, 250)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.016
      text [set every repeat] = $ptime_txt
      units = pix
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_psychopy.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'id': 0, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 0, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016},
      {'id': 0, 'whilewhen': 1, 't_60': 0.048, 't_120': 0.032},
      {'id': 0, 'whilewhen': 1, 't_60': 0.064, 't_120': 0.048},
      {'id': 1, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 1, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016},
      {'id': 1, 'whilewhen': 1, 't_60': 0.048, 't_120': 0.032},
      {'id': 1, 'whilewhen': 1, 't_60': 0.064, 't_120': 0.048},
      {'id': 2, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 2, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016},
      {'id': 2, 'whilewhen': 1, 't_60': 0.048, 't_120': 0.032},
      {'id': 2, 'whilewhen': 1, 't_60': 0.064, 't_120': 0.048},
      {'id': 3, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 3, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016},
      {'id': 3, 'whilewhen': 1, 't_60': 0.048, 't_120': 0.032},
      {'id': 3, 'whilewhen': 1, 't_60': 0.064, 't_120': 0.048},
      {'id': 4, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 4, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016},
      {'id': 4, 'whilewhen': 1, 't_60': 0.048, 't_120': 0.032},
      {'id': 4, 'whilewhen': 1, 't_60': 0.064, 't_120': 0.048},
      {'id': 5, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 5, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016},
      {'id': 5, 'whilewhen': 1, 't_60': 0.048, 't_120': 0.032},
      {'id': 5, 'whilewhen': 1, 't_60': 0.064, 't_120': 0.048},
      {'id': 6, 'whilewhen': 1, 't_60': 0.016, 't_120': 0.008},
      {'id': 6, 'whilewhen': 1, 't_60': 0.032, 't_120': 0.016}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
    Routine wait
    Routine ptarget
    Routine pmask
  LoopTerminator trials
